<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <readers>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>AcquisitionReader</classname>
        </reader>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>WaveformReader</classname>
        </reader>
    </readers>

    <writers>
        <writer>
            <dll>gadgetron_core_writers</dll>
            <classname>ImageWriter</classname>
        </writer>
    </writers>

    <stream>
        <gadget>
            <name>RemoveROOversampling</name>
            <dll>gadgetron_mricore</dll>
            <classname>RemoveROOversamplingGadget</classname>
        </gadget>
        <gadget>
            <dll>gadgetron_mricore</dll>

            <classname>AcquisitionAccumulateTriggerGadget</classname>
            <property>
                <name>trigger_dimension</name>
                <value>n_acquisitions</value>
            </property>
            <property>
                <name>n_acquisitions_before_trigger</name>
                <value>5000</value>
            </property>
            <property>
                <name>n_acquisitions_before_ongoing_trigger</name>
                <value>5000</value>
            </property>
        </gadget>

        <external>
            <execute name="ReconBSS" type="matlab"/>
            <configuration/>
        </external>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>FloatToUShortGadget</classname>
        </gadget>

    </stream>
</configuration>
