<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>
    
    <readers>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>AcquisitionReader</classname>
        </reader>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>WaveformReader</classname>
        </reader>
    </readers>
    
    <writers>
        <writer>
            <dll>gadgetron_core_writers</dll>
            <classname>ImageWriter</classname>
        </writer>
    </writers>
    
    <stream>

        <gadget>
            <name>NoiseAdjust</name>
            <dll>gadgetron_mricore</dll>
            <classname>NoiseAdjustGadget</classname>
        </gadget>
 
        <gadget>
            <name>RemoveROOversampling</name>
            <dll>gadgetron_mricore</dll>
            <classname>RemoveROOversamplingGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>AcquisitionAccumulateTriggerGadget</classname>
                <!--
                <property>
                        <name>trigger_dimension</name>
                        <value>kspace_encode_step_1</value>
                </property>
                -->
                <property name="trigger_dimension" value="n_acquisitions"/>
                <property name="n_acquisitions_before_trigger" value="1000"/>
                <property name="n_acquisitions_before_ongoing_trigger" value="1000"/>
        </gadget>

        <external>
                <execute name="ReconMPM" type="matlab"/>
                <!--<connect port="18000"/>-->
            <configuration/>
        </external>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>FloatToUShortGadget</classname>
        </gadget>
        
    </stream>
</configuration>
